PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1600, 900]
  Full-screen window = False
  expName = tetris_test
  Screen = 1
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Routines
  Routine trial
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        trial
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine welcome
    TextComponent text
      text = hi darling
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine bye
    TextComponent text_4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        bye
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine tetris
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
        tetris
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Experiment:
        import tetris
        from threading import Thread
      Begin Routine:
        thread01 = Thread(target = tetris.mainStart, args=[])
        print 'Starting thread ...\n\n'
        thread01.start()
        thread01.join()
        print '\n\nThread finished!'
Flow
  Routine welcome
  Routine trial
  Routine tetris
  Routine bye
